PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  expName = df_e1
  logging level = debug
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Routines
  Routine consent
  Routine instructions
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent ins
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    TextComponent con1
      color = black
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 2
      text = Press the spacebar to continue.
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  Routine b1_ins
  Routine b1
    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine b2_ins
  Routine b2
  Routine dist
  Routine test
  Routine debrief
Flow
  Routine consent
  Routine instructions
  Routine b1_ins
  Routine b1
  Routine b2_ins
  Routine b2
  Routine dist
  Routine test
  Routine debrief
